'CR800 Datalogger for span2nodeA covering fields 2001, 2003 and 2007

'Declare Public Variables 
Public BatV 

Public _2001A1IRTXX23, _2003A2IRTXX23, _2007A2IRTXX23 'IRTXX23 sensors 

Public _2001A1TDR0623_VWC, _2003A2TDR0623_VWC, _2007A2TDR0623_VWC 'TDR0623 sensors VWC
Public _2001A1TDR1823_VWC, _2003A2TDR1823_VWC, _2007A2TDR1823_VWC 'TDR1823 sensors VWC
Public _2001A1TDR3023_VWC, _2003A2TDR3023_VWC, _2007A2TDR3023_VWC 'TDR3023 sensors VWC
Public _2001A1TDR4223_VWC 'TDR4223 sensor VWC

Public _2001A1TDR0623_ST, _2003A2TDR0623_ST, _2007A2TDR0623_ST 'TDR0623 sensors ST
Public _2001A1TDR1823_ST, _2003A2TDR1823_ST, _2007A2TDR1823_ST 'TDR1823 sensors ST
Public _2001A1TDR3023_ST, _2003A2TDR3023_ST, _2007A2TDR3023_ST 'TDR3023 sensors ST
Public _2001A1TDR4223_ST 'TDR4223 sensor ST

'Declare SDI-12 Addresses 
Public _2001A1IRTXX23_Addr As String * 8 
Public _2003A2IRTXX23_Addr As String * 8 
Public _2007A2IRTXX23_Addr As String * 8 

Public _2001A1TDR0623_Addr As String * 8 
Public _2003A2TDR0623_Addr As String * 8 
Public _2007A2TDR0623_Addr As String * 8 

Public _2001A1TDR1823_Addr As String * 8 
Public _2003A2TDR1823_Addr As String * 8 
Public _2007A2TDR1823_Addr As String * 8 

Public _2001A1TDR3023_Addr As String * 8 
Public _2003A2TDR3023_Addr As String * 8 
Public _2007A2TDR3023_Addr As String * 8 

Public _2001A1TDR4223_Addr As String * 8 

'DataTable for storing sensor data 
DataTable(span2nodeA,True,-1) 
DataInterval(0,15,Min,0)
Battery(BatV)
Sample(1,BatV,IEEE4) 

Sample(1,_2001A1IRTXX23,IEEE4) 
Sample(1,_2003A2IRTXX23,IEEE4) 
Sample(1,_2007A2IRTXX23,IEEE4) 

Sample(1,_2001A1TDR0623_VWC,IEEE4) 
Sample(1,_2003A2TDR0623_VWC,IEEE4) 
Sample(1,_2007A2TDR0623_VWC,IEEE4) 

Sample(1,_2001A1TDR1823_VWC,IEEE4) 
Sample(1,_2003A2TDR1823_VWC,IEEE4) 
Sample(1,_2007A2TDR1823_VWC,IEEE4) 

Sample(1,_2001A1TDR3023_VWC,IEEE4) 
Sample(1,_2003A2TDR3023_VWC,IEEE4) 
Sample(1,_2007A2TDR3023_VWC,IEEE4) 

Sample(1,_2001A1TDR4223_VWC,IEEE4)

Sample(1,_2001A1TDR0623_ST,IEEE4) 
Sample(1,_2003A2TDR0623_ST,IEEE4) 
Sample(1,_2007A2TDR0623_ST,IEEE4) 

Sample(1,_2001A1TDR1823_ST,IEEE4) 
Sample(1,_2003A2TDR1823_ST,IEEE4) 
Sample(1,_2007A2TDR1823_ST,IEEE4) 

Sample(1,_2001A1TDR3023_ST,IEEE4) 
Sample(1,_2003A2TDR3023_ST,IEEE4) 
Sample(1,_2007A2TDR3023_ST,IEEE4) 

Sample(1,_2001A1TDR4223_ST,IEEE4) 
EndTable 

'Main Program 
BeginProg 

'Assign SDI-12 Addresses 
_2001A1IRTXX23_Addr = "0"
_2001A1TDR0623_Addr = "1"
_2001A1TDR1823_Addr = "2"
_2001A1TDR3023_Addr = "3"
_2001A1TDR4223_Addr = "4"

_2003A2IRTXX23_Addr = "5"
_2003A2TDR0623_Addr = "6"
_2003A2TDR1823_Addr = "7"
_2003A2TDR3023_Addr = "8"

_2007A2IRTXX23_Addr = "a"
_2007A2TDR0623_Addr = "b"
_2007A2TDR1823_Addr = "c"
_2007A2TDR3023_Addr = "d"

Scan(1,Min,15,0)  
Battery(BatV) 

'Collect data from the sensors
SDI12Recorder(_2001A1IRTXX23,1,_2001A1IRTXX23_Addr,"M!",1,0) 
SDI12Recorder(_2003A2IRTXX23,1,_2003A2IRTXX23_Addr,"M!",1,0) 
SDI12Recorder(_2007A2IRTXX23,1,_2007A2IRTXX23_Addr,"M!",1,0) 

SDI12Recorder(_2001A1TDR0623_VWC,1,_2001A1TDR0623_Addr,"M!",1,0) 
SDI12Recorder(_2003A2TDR0623_VWC,1,_2003A2TDR0623_Addr,"M!",1,0)
SDI12Recorder(_2007A2TDR0623_VWC,1,_2007A2TDR0623_Addr,"M!",1,0)

SDI12Recorder(_2001A1TDR1823_VWC,1,_2001A1TDR1823_Addr,"M!",1,0) 
SDI12Recorder(_2003A2TDR1823_VWC,1,_2003A2TDR1823_Addr,"M!",1,0)
SDI12Recorder(_2007A2TDR1823_VWC,1,_2007A2TDR1823_Addr,"M!",1,0)

SDI12Recorder(_2001A1TDR3023_VWC,1,_2001A1TDR3023_Addr,"M!",1,0) 
SDI12Recorder(_2003A2TDR3023_VWC,1,_2003A2TDR3023_Addr,"M!",1,0)
SDI12Recorder(_2007A2TDR3023_VWC,1,_2007A2TDR3023_Addr,"M!",1,0)

SDI12Recorder(_2001A1TDR4223_VWC,1,_2001A1TDR4223_Addr,"M!",1,0)

SDI12Recorder(_2001A1TDR0623_ST,1,_2001A1TDR0623_Addr,"M!",2,0) 
SDI12Recorder(_2003A2TDR0623_ST,1,_2003A2TDR0623_Addr,"M!",2,0)
SDI12Recorder(_2007A2TDR0623_ST,1,_2007A2TDR0623_Addr,"M!",2,0)

SDI12Recorder(_2001A1TDR1823_ST,1,_2001A1TDR1823_Addr,"M!",2,0) 
SDI12Recorder(_2003A2TDR1823_ST,1,_2003A2TDR1823_Addr,"M!",2,0)
SDI12Recorder(_2007A2TDR1823_ST,1,_2007A2TDR1823_Addr,"M!",2,0)

SDI12Recorder(_2001A1TDR3023_ST,1,_2001A1TDR3023_Addr,"M!",2,0) 
SDI12Recorder(_2003A2TDR3023_ST,1,_2003A2TDR3023_Addr,"M!",2,0)
SDI12Recorder(_2007A2TDR3023_ST,1,_2007A2TDR3023_Addr,"M!",2,0)

SDI12Recorder(_2001A1TDR4223_ST,1,_2001A1TDR4223_Addr,"M!",2,0)

CallTable(span2nodeA) 

NextScan 
EndProg

